PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'image_size': '300', 'debug': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = black
  expName = localizer
  keyboardBackend = ioHub
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Routines
  Routine response_routine
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    CodeComponent reponse_trigger_code
      Code Type = Auto->JS
      Begin Routine:
        trials.addData("discrim_resptime", globalClock.getTime() - startTime)

        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]

        idx = np.random.choice([0,1])
        msg = '{}'.format(resp_options[idx][0])

        trials.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1

        trials.addData('correctAns',temp_correctAns)

        # objective accuracy

        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0

        trials.addData('response.corr' , temp_corr)
    KeyboardComponent response
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent tell_response
      letterHeight = 0.1
      startVal [frame N] = 0.0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $msg
  Routine introduction
    RoutineSettingsComponent introduction
      saveStartStop = False
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    TextComponent description_of_experiment
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        这个实验是一个定位任务。

        您的任务是识别接下来的图片里是人脸还是房子。

        请根据V（人脸）和nV（房子）的相对位置来按键。

        对应左边的按“1”，对应右边的按“2”。

        请实验员按“空格”键继续。
    KeyboardComponent start_experiment
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine jitter_delay
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    CodeComponent pick_jitter_delay_duration
      Code Type = Auto->JS
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      Begin Routine:
        jitter_delay_dur=np.random.choice([1,1.5,2,2.5,3],size = 1,)[0]#first is jit1_count 0

        trials.addData("jitter1", jitter_delay_dur)
    TextComponent delay_post_mask
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_delay_dur
      text = +
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  Routine visibility
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    KeyboardComponent visible
      allowedKeys = '1','2','3'
      correctAns = 1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent tell_visible
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = ?
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    CodeComponent trigger_visibility
      Code Type = Auto->JS
      Begin Routine:
        trials.addData("visible_resptime", globalClock.getTime() - startTime)
    CodeComponent staircase
      Code Type = Auto->JS
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      End Routine:
        count += 1
        trials.addData('probe_Frames',curr)

        count += 1
        if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
                curr += np.random.choice([1,2,],size=1,p=[0.5,0.5])[0]
                if curr < 1:  curr = 1
        elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
                curr -= 1
                if curr < 1:  curr = 1
        elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
                curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
                if curr < 1: curr = 1
  Routine show_message
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    CodeComponent print_
      Code Type = Auto->JS
      Begin Routine:
        meanacc = trials.data['response.corr'].mean()
        meanvis = trials.data['visible.corr'].mean()
        #msg="{} / {}\n\nmean correct {:.2f} \npresenting frames = {}\nmean unconscious response = {:.3f}" .format(
        #count,n_total,meanacc,curr,meanvis)

        #msg = msg + '\nkey={},cor={}'.format(response.keys,str(temp_correctAns))
        #msg WOULD BE TO DISPLAY IN A TXT OBJECT - THAT HAS BEEN DELETED
      End Routine:
        print("{}/{},mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            trials.thisN,trials.nTotal,
            meanvis,curr,meanacc))
  Routine probe_routine
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trials.addData("image_onset_time", globalClock.getTime() - startTime)
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
        trigger_code = dict_answer[category]
      Each Frame:
        if not debug:
            if probe.status == STARTED and not stimulus_pulse_started:
                # update params
                win.callOnFlip(dev.activate_line, trigger_code)
                stimulus_pulse_start_time = globalClock.getTime()
                stimulus_pulse_started = True
            if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    #win.callOnFlip(port.write, str.encode('0'))
                    stimulus_pulse_ended = True
    TextComponent preblank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $np.random.choice([0.5,1],size = 1)[0]
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    ImageComponent probe
      image [set every repeat] = $image_name
      size = $(image_size, image_size)
      startVal [condition] = $preblank.status == FINISHED
      stopVal [duration (s)] = 1
      units = pix
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    SerialOutComponent trigger_probe
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = COM1
      startVal [condition] = $preblank.status == FINISHED
      startdata = $chr(8)
      stopVal [duration (s)] = 1.0
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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    TextComponent postblank
      letterHeight = 0.05
      startVal [condition] = $probe.status == FINISHED
      stopVal [duration (s)] = $np.random.choice([0.5,1],size = 1)[0]
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  Routine End_experiment
    RoutineSettingsComponent End_experiment
      saveStartStop = False
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    TextComponent The_End
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Experiment:
        print(globalClock.getTime() - startTime)
        #print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
        #    meanvis,curr,meanacc))
  Routine setupTRIGetc
    RoutineSettingsComponent setupTRIGetc
      saveStartStop = False
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    CodeComponent setup_vbles_trigger
      Code Type = Auto->JS
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      Begin Experiment:
        #curr=int(expInfo['probeFrames'])
        count=0

        #n_total = 32
        #premask_dur = float(expInfo['premask_dur'])
        #postmask_dur = float(expInfo['postmask_dur'])
        #session = int(expInfo['session'])
        #block = int(expInfo['block'])
        #n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        debug = bool(expInfo['debug'])
        import time
        #from psychopy import parallel
        #parallel.setPortAddress(888)
        #wait_msg = "Waiting for Scanner..."
        #msg = visual.TextStim(win, color = 'DarkGray', text = wait_msg)
        dict_answer = {'Living_Things':1,
                       'Nonliving_Things':2,}


        if not debug:
            import pyxid2
            import time

            # get a list of all attached XID devices
            devices = pyxid2.get_xid_devices()

            dev = devices[0] # get the first device to use
            print(dev)
            dev.reset_base_timer()
            dev.reset_rt_timer()
            dev.set_pulse_duration(30)
      Begin Routine:
        #msg.draw()
        win.flip()

        #while True:
        #    if (parallel.readPin(10) == 1) or (event.getKeys() == ['q']):
        #        break
        #    else:
        #        time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine postmask
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    GratingComponent postmask_1
      interpolate = nearest
      phase [set every repeat] = $np.random.uniform(0,1,2).round(1)
      sf = None
      size = $(image_size, image_size)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $postmask_dur
      tex [set every frame] = $np.random.rand(n_square,n_square) * 2 -1
      units = pix
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  Routine post_trial_jitter
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    TextComponent post_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter2_delay_dur
      text = +
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    CodeComponent pick_post_fixation_duration
      Code Type = Auto->JS
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      Begin Routine:
        jitter2_delay_dur=np.random.choice([2,2.5,3,3.5],size = 1)[0]#first is jit1_count 0

        trials.addData("jitter2", jitter2_delay_dur)
Flow
  Routine setupTRIGetc
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dataframes/locolizer.csv
    loopType = random
    nReps = 1
    random seed = 12345
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    conditions:
      [OrderedDict([('image_name', 'materials/face/female_1.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_100.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_12.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_14.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_16.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_17.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_20.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_24.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_25.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_27.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_28.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_29.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_31.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_32.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_34.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_36.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_39.gif'), ('category', 'face')]),
      OrderedDict([('image_name', 'materials/face/female_40.gif'), ('category', 'face')])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
    Routine probe_routine
    Routine response_routine
  LoopTerminator trials
  Routine End_experiment
