PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001', 'debug': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = motor_localizer
  keyboardBackend = ioHub
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Routines
  Routine setupTRIGetc
    RoutineSettingsComponent setupTRIGetc
      saveStartStop = False
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    CodeComponent setup_vbles_trigger
      Code Type = Auto->JS
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      Begin Experiment:
        debug = bool(expInfo['debug'])
        if not debug:
            import pyxid2
            import time

            # get a list of all attached XID devices
            devices = pyxid2.get_xid_devices()

            dev = devices[0] # get the first device to use
            print(dev)
            dev.reset_base_timer()
            dev.reset_rt_timer()
            dev.set_pulse_duration(10)
  Routine introduction
    RoutineSettingsComponent introduction
      saveStartStop = False
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    TextComponent description_of_experiment
      letterHeight = 0.05
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        这个实验是一个定位任务。

        您的任务是根据红色注视十字的位置选择对应的按键。

        在其中一个十字变色后

        您有至少有1.5秒的时间窗选择按键。
    KeyboardComponent start_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine task
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    TextComponent left
      color [set every repeat] = $left_color
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_duration
      text = +
      units = norm
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    TextComponent middle
      color [set every repeat] = $middle_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_duration
      text = +
      units = norm
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    TextComponent right
      color [set every repeat] = $right_color
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_duration
      text = +
      units = norm
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    KeyboardComponent response
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_duration
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    CodeComponent trigger
      Code Type = Auto->JS
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      Begin Routine:
        # initialize the stimulus trigger parameters
        stimulus_pulse_started = False
        stimulus_pulse_ended = False
      Each Frame:
        if not debug:
            if probe.status == STARTED and not stimulus_pulse_started:
                # update params
                win.callOnFlip(dev.activate_line, 1)
                stimulus_pulse_start_time = globalClock.getTime()
                stimulus_pulse_started = True
            if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    #win.callOnFlip(port.write, str.encode('0'))
                    stimulus_pulse_ended = True
  Routine end_exxperiment
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    TextComponent The_End
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine prepare
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    TextComponent pre_left
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prepare_duration
      text = +
      units = norm
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    TextComponent pre_middle
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prepare_duration
      text = +
      units = norm
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    TextComponent pre_right
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prepare_duration
      text = +
      units = norm
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  Routine blank
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    TextComponent empty_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $blank_duration
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Flow
  Routine setupTRIGetc
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = dataframes/motor_localizer.csv
    loopType = random
    nReps = 1
    random seed = 12345
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    conditions:
      [OrderedDict([('prepare_duration', 1.4469606941353426), ('target_duration', 1.4644310136327832), ('blank_duration', 1.101242509623804), ('left_color', 'red'), ('middle_color', 'white'), ('right_color', 'white')]),
      OrderedDict([('prepare_duration', 1.388907054561348), ('target_duration', 1.9074654336446124), ('blank_duration', 1.106123747092242), ('left_color', 'red'), ('middle_color', 'white'), ('right_color', 'white')]),
      OrderedDict([('prepare_duration', 1.4648643868344815), ('target_duration', 1.5308169245481995), ('blank_duration', 1.3754846591302785), ('left_color', 'red'), ('middle_color', 'white'), ('right_color', 'white')]),
      OrderedDict([('prepare_duration', 1.3787659297110992), ('target_duration', 1.5951675320982452), ('blank_duration', 1.4698795457205485), ('left_color', 'white'), ('middle_color', 'red'), ('right_color', 'white')]),
      OrderedDict([('prepare_duration', 1.1384939365254236), ('target_duration', 1.660142195564557), ('blank_duration', 1.0048737219070896), ('left_color', 'red'), ('middle_color', 'white'), ('right_color', 'white')]),
      OrderedDict([('prepare_duration', 1.029191378939004), ('target_duration', 1.4607942227583648), ('blank_duration', 1.0471901467464806), ('left_color', 'white'), ('middle_color', 'white'), ('right_color', 'red')]),
      OrderedDict([('prepare_duration', 1.0876252716476245), ('target_duration', 1.482405289043656), ('blank_duration', 1.345707341864908), ('left_color', 'white'), ('middle_color', 'red'), ('right_color', 'white')])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
    Routine prepare
    Routine task
    Routine blank
  LoopTerminator trials
  Routine end_exxperiment
