PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'n_square': '64', 'probeFrames': '1', 'participant': '1', 'image_size': '300', 'postmask_dur': '20', 'session': '1', 'block': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = black
  expName = post-mask-only
  keyboardBackend = ioHub
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Routines
  Routine response_routine
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    CodeComponent reponse_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        trials.addData("discrim_resptime", globalClock.getTime() - startTime)

        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]

        idx = np.random.choice([0,1])
        msg = '{}'.format(resp_options[idx][0])

        trials.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1

        trials.addData('correctAns',temp_correctAns)

        # objective accuracy

        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0

        trials.addData('response.corr' , temp_corr)
    KeyboardComponent response
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent tell_response
      letterHeight = 0.1
      startVal [frame N] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $msg
  Routine introduction
    RoutineSettingsComponent introduction
      saveStartStop = False
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    TextComponent description_of_experiment
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        您的任务是识别接下来的图片里是人脸还是房子。

        请根据V（人脸）和nV（房子）的相对位置来按键。

        对应左边的按“1”，对应右边的按“2”。

        实验即将开始。
    TextComponent global_fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = +
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  Routine jitter_delay
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    CodeComponent pick_jitter_delay_duration
      Code Type = Auto->JS
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      Begin Routine:
        jitter_delay_dur=np.random.choice([1,1.5,2,2.5,3],size = 1,)[0]#first is jit1_count 0

        trials.addData("jitter1", jitter_delay_dur)
    TextComponent delay_post_mask
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_delay_dur
      text = +
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  Routine visibility
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    KeyboardComponent visible
      allowedKeys = '1','2','3'
      correctAns = 1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent tell_visible
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = ?
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    CodeComponent trigger_visibility
      Code Type = Auto->JS
      Begin Routine:
        trials.addData("visible_resptime", globalClock.getTime() - startTime)
    CodeComponent staircase
      Code Type = Auto->JS
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      End Routine:
        count += 1
        trials.addData('probe_Frames',curr)

        count += 1
        if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
                curr += np.random.choice([1,2,],size=1,p=[0.5,0.5])[0]
                if curr < 1:  curr = 1
        elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
                curr -= 1
                if curr < 1:  curr = 1
        elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
                curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
                if curr < 1: curr = 1
  Routine show_message
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    CodeComponent print_
      Code Type = Auto->JS
      Begin Routine:
        meanacc = trials.data['response.corr'].mean()
        meanvis = trials.data['visible.corr'].mean()
        #msg="{} / {}\n\nmean correct {:.2f} \npresenting frames = {}\nmean unconscious response = {:.3f}" .format(
        #count,n_total,meanacc,curr,meanvis)

        #msg = msg + '\nkey={},cor={}'.format(response.keys,str(temp_correctAns))
        #msg WOULD BE TO DISPLAY IN A TXT OBJECT - THAT HAS BEEN DELETED
      End Routine:
        print("{}/{},mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            trials.thisN,trials.nTotal,
            meanvis,curr,meanacc))
  Routine probe_routine
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trials.addData("image_onset_time", globalClock.getTime() - startTime)
        trigger_code = dict_answer[category]
    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $np.random.choice([0.5,1],size = 1)[0]
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    ImageComponent probe
      image [set every repeat] = $image_name
      size = $(image_size, image_size)
      startVal [condition] = $blank.status == FINISHED
      stopVal [duration (frames)] = $curr
      units = pix
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    SerialOutComponent trigger_probe
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = COM1
      startVal [condition] = $blank.status == FINISHED
      startdata = $chr(trigger_code)
      stopVal [duration (frames)] = $curr
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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  Routine End_experiment
    RoutineSettingsComponent End_experiment
      saveStartStop = False
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    TextComponent The_End
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Experiment:
        print(globalClock.getTime() - startTime)
        #print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
        #    meanvis,curr,meanacc))
  Routine setupTRIGetc
    RoutineSettingsComponent setupTRIGetc
      saveStartStop = False
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    CodeComponent setup_vbles_trigger
      Code Type = Auto->JS
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      Begin Experiment:
        curr=int(expInfo['probeFrames'])
        count=0

        #n_total = 32
        #premask_dur = float(expInfo['premask_dur'])
        postmask_dur = float(expInfo['postmask_dur'])
        session = int(expInfo['session'])
        block = int(expInfo['block'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])

        dict_answer = {'Living_Things':1,
                       'Nonliving_Things':2,}

        dict_response = {'1':3,'2':4}

        dict_visible = {'1':5,'2':6,'3':7}

        import time
        #from psychopy import parallel
        #parallel.setPortAddress(888)
        #wait_msg = "Waiting for Scanner..."
        #msg = visual.TextStim(win, color = 'DarkGray', text = wait_msg)
      Begin Routine:
        #msg.draw()
        win.flip()

        #while True:
        #    if (parallel.readPin(10) == 1) or (event.getKeys() == ['q']):
        #        break
        #    else:
        #        time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine postmask
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    GratingComponent postmask_1
      interpolate = nearest
      phase [set every repeat] = $np.random.uniform(0,1,2).round(1)
      sf = None
      size = $(image_size, image_size)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $postmask_dur
      tex [set every frame] = $np.random.rand(n_square,n_square) * 2 -1
      units = pix
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  Routine post_trial_jitter
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    TextComponent post_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter2_delay_dur
      text = +
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    CodeComponent pick_post_fixation_duration
      Code Type = Auto->JS
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      Begin Routine:
        jitter2_delay_dur=np.random.choice([1,1.5,2,2.5],size = 1)[0]#first is jit1_count 0

        trials.addData("jitter2", jitter2_delay_dur)
Flow
  Routine setupTRIGetc
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f"dataframes/face-house-{session}{block}.csv"
    loopType = random
    nReps = 1
    random seed = 12345
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    conditions:
      [OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\male_18_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Nonliving_Things'), ('image_name', 'processed\\house\\House5_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Nonliving_Things'), ('image_name', 'processed\\house\\House38_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Nonliving_Things'), ('image_name', 'processed\\house\\House42_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\male_24_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\male_92_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\male_21_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\male_10_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\female_40_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\male_23_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Nonliving_Things'), ('image_name', 'processed\\house\\House48_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Living_Things'), ('image_name', 'processed\\face\\female_45_0.png'), ('count', 0)]),
      OrderedDict([('category', 'Nonliving_Things'), ('image_name', 'processed\\house\\House96_0.png'), ('count', 0)])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
    Routine probe_routine
    Routine postmask
    Routine jitter_delay
    Routine response_routine
    Routine visibility
    Routine post_trial_jitter
    Routine show_message
  LoopTerminator trials
  Routine End_experiment
